PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[1,1,1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'session': u'001', u'participant': u'', u'Animal': u''}
  expName = experiment_premade_counterbalance
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    ImageComponent real_image
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.5
      image [set every repeat] = $image
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    TextComponent fixation_cross
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response_keys
      correctAns = $correctAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 1.5
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    ImageComponent instructions
      startVal [time (s)] = 1.5
      image = instructions.png
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  Routine welcome
    ImageComponent welcome_slide
      startVal [time (s)] = 0.0
      image = welcome_slide.png
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    KeyboardComponent welcome_keypress
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine practice_trial
    ImageComponent real_image_practice
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.5
      image [set every repeat] = $practice_image
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    TextComponent fixation_cross_practice
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response_keys_practice
      correctAns = $correctAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 1.5
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    ImageComponent instructions_practice
      startVal [time (s)] = 1.5
      image = instructions.png
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Flow
  Routine welcome
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = $"practice_%s.xlsx" %(expInfo['Animal'])
    loopType = sequential
    nReps = 1
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    Routine practice_trial
  LoopTerminator practice_loop
  LoopInitiator experiment_loop loopType="TrialHandler"
    conditionsFile = $"%s.xlsx" %(expInfo['Animal'])
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator experiment_loop
