PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[1,1,1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'session': u'001', u'participant': u''}
  expName = experiment_premade_feedback
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    ImageComponent real_image
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.5
      image [set every repeat] = $image
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    TextComponent fixation_cross
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response_keys
      correctAns = $correctAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 1.5
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    ImageComponent instructions
      startVal [time (s)] = 1.5
      image = instructions.png
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  Routine welcome
    ImageComponent welcome_slide
      startVal [time (s)] = 0.0
      image = welcome_slide.png
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    KeyboardComponent welcome_keypress
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine practice_trial
    ImageComponent real_image_practice
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.5
      image [set every repeat] = $practice_image
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    TextComponent fixation_cross_practice
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response_keys_practice
      correctAns = $correctAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 1.5
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    ImageComponent instructions_practice
      startVal [time (s)] = 1.5
      image = instructions.png
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  Routine Feedback
    CodeComponent errorcode
      Begin Experiment:
        error_msg =  "Whoops, forgot to update this!"
      Begin Routine:
        #if incorrect show error message, otherwise show positive feedback
        if response_keys_practice.corr == False:
            error_msg = "Oops! That was wrong!"
        elif response_keys_practice.corr == True:
            error_msg = "Correct! \nExcellent animal recognition!"
    TextComponent feedbacktext
      color = black
      text [set every repeat] = $error_msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine welcome
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'correctAns': u'y', u'image': u'duckling2.png'},
      {u'correctAns': u'n', u'image': u'baby_donald.png'}]
    Routine practice_trial
    Routine Feedback
  LoopTerminator practice_loop
  LoopInitiator experiment_loop loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'correctAns': u'n', u'image': u'daffy_duck.png'},
      {u'correctAns': u'y', u'image': u'duck.png'},
      {u'correctAns': u'n', u'image': u'donald_duck.png'},
      {u'correctAns': u'y', u'image': u'duck2.png'},
      {u'correctAns': u'n', u'image': u'daisy_duck.png'},
      {u'correctAns': u'y', u'image': u'duck3.png'},
      {u'correctAns': u'n', u'image': u'baby_duck.png'},
      {u'correctAns': u'y', u'image': u'duck4.png'}]
    Routine trial
  LoopTerminator experiment_loop
